PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = phase1Prototype
  keyboardBackend = ioHub
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Routines
  Routine startScreen
    CodeComponent startScreenCode
      Code Type = Auto->JS
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      Before Experiment:
        # Preset end code (press 'e' to go to end screen)
        key_pressed = False

        # Set accuracy counts to zero
        number_total = 0
        number_correct = 0
        number_incorrect = 0
        number_firstcorrect = 0
        incorrect_at_first = 0
        incorrect_at_second = 0
        incorrect_at_third = 0
        incorrect_at_fourth = 0
      Begin Experiment:
        #Import code for turning mouse off
        #from psychopy import core

        #Timer for experiment
        #myClock = clore.Clock()
      Begin Routine:
        #Hide mouse on screen
        #event.mouse(visible = False)
    TextComponent startScreenText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Click anywhere to start

        Please check that the touchscreen is working
    MouseComponent startScreenMouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine firstArray
    MouseComponent mouse
      clickable = clickableStims
      forceEndRoutineOnPress = never
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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    CodeComponent firstArrayCode
      Code Type = Auto->JS
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      Begin Routine:
        #Stims that can be clicked at the beginning
        clickableStims = [pinkOne, pinkTwo, pinkThree, pinkFour]
        #reset opacity
        for stim in clickableStims:
            stim.opacity = 1

        clickedStims = []
        #timer for delays
        timer = core.Clock()
      Each Frame:
        #record clicks
        for stim in clickableStims:
            if mouse.isPressedIn(stim):
                clickedStims.append(stim.name)
                timer.reset()
                #prevent stims from being pressed, darken clicked
                if timer.getTime() < 3:
                    clickableStims = []
                    stim.opacity = .5
        #continue trial after 3 seconds
        if timer.getTime() >= 3:
            clickableStims = [pinkOne, pinkTwo, pinkThree, pinkFour]
            for stim in clickableStims:
                stim.opacity = 1
            #playFirstTouch = []

        #Check correctness
        if len(mouse.clicked_name) == 1 and mouse.clicked_name[0] != 'pinkOne':
            incorrect_at_first += 1
            number_incorrect +=1
            for stim in clickableStims:
                stim.opacity = 1
            continueRoutine = False

        if len(mouse.clicked_name) == 2 and mouse.clicked_name[1] != 'pinkTwo':
            incorrect_at_second += 1
            number_incorrect +=1
            for stim in clickableStims:
                stim.opacity = 1
            continueRoutine = False

        if len(mouse.clicked_name) == 3 and mouse.clicked_name[2] != 'pinkThree':
            incorrect_at_third += 1
            number_incorrect +=1
            for stim in clickableStims:
                stim.opacity = 1
            continueRoutine = False

        #end
        if len(mouse.clicked_name) == 4 and mouse.clicked_name[3] != 'pinkFour':
            continueRoutine = False
            for stim in clickableStims:
                stim.opacity = 1
        elif len(mouse.clicked_name) == 4 and mouse.clicked_name[3] == 'pinkFour':
            continueRoutine = False
            for stim in clickableStims:
                stim.opacity = 1
    ImageComponent pinkOne
      image [set every repeat] = stimuli/pinkOne.png
      pos [set every repeat] = xys[0]
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent pinkTwo
      image [set every repeat] = stimuli/pinkTwo.png
      pos [set every repeat] = xys[2]
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent pinkThree
      image [set every repeat] = stimuli/pinkThree.png
      pos [set every repeat] = xys[3]
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent pinkFour
      image [set every repeat] = stimuli/pinkFour.png
      pos [set every repeat] = xys[1]
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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  Routine firstFeedback
    CodeComponent firstFeedbackCode
      Code Type = Auto->JS
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      Begin Routine:
        #keys = event.getKeys()
        #if 'e' in keys:
        #    key_pressed = True
        #if key_pressed == True:
        #    continueRoutine = False

        if mouse.clicked_name == ['pinkOne', 'pinkTwo', 'pinkThree', 'pinkFour']:
            feedbackColor = "stimuli/GreenCorrectScreen.png"
            feedbackSound = "stimuli/Positive.wav"
            number_correct += 1
            number_total += 1
            correct = 1

        else:
            feedbackColor = "stimuli/solid-red-background.jpg"
            feedbackSound = "stimuli/Negative.wav"
            number_incorrect +=1
            number_total += 1

            correct = 0

        thisExp.addData('correct_answer', correct)
    ImageComponent feedbackStim
      image [set every repeat] = $feedbackColor
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    SoundComponent feedbackAudio
      sound [set every repeat] = $feedbackSound
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine pause
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine secondArray
    MouseComponent mouse_2
      clickable = clickableStims
      forceEndRoutineOnPress = never
      saveMouseState = on valid click
      startVal [time (s)] = 0.0
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    CodeComponent secondArrayCode
      Code Type = Auto->JS
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      Begin Routine:
        #keys = event.getKeys()
        #if 'e' in keys:
        #    key_pressed = True
        #if key_pressed == True:
        #    #exit trial does not count
        #    number_total -= 1
        #    trials.finished = True
        #    continueRoutine = False

        clickableStims = [greenOne, greenTwo, greenThree, greenFour]
        for stim in clickableStims:
            stim.opacity = 1

        clickedStims = []

        secondTimer = core.Clock()
        #playFirstTouch = []
      Each Frame:
        #record clicks
        for stim in clickableStims:
            if mouse.isPressedIn(stim):
                clickedStims.append(stim.name)
                secondTimer.reset()
                if secondTimer.getTime() < 3:
                    clickableStims = []
                    stim.opacity = .5

        if secondTimer.getTime() >= 3:
            clickableStims = [greenOne, greenTwo, greenThree, greenFour]
            for stim in clickableStims:
                stim.opacity = .8
            #playFirstTouch = []

        #Check correctness
        if len(mouse_2.clicked_name) == 1 and mouse_2.clicked_name[0] != 'greenFour':
            incorrect_at_first += 1
            number_incorrect +=1
            for stim in clickableStims:
                stim.opacity = 1
            continueRoutine = False

        if len(mouse_2.clicked_name) == 2 and mouse_2.clicked_name[1] != 'greenThree':
            incorrect_at_second += 1
            number_incorrect +=1
            for stim in clickableStims:
                stim.opacity = 1
            continueRoutine = False

        if len(mouse_2.clicked_name) == 3 and mouse_2.clicked_name[2] != 'greenTwo':
            incorrect_at_third += 1
            number_incorrect +=1
            for stim in clickableStims:
                stim.opacity = 1
            continueRoutine = False

        #end
        if len(mouse_2.clicked_name) == 4 and mouse_2.clicked_name[3] != 'greenOne':
            continueRoutine = False
            for stim in clickableStims:
                stim.opacity = 1
        elif len(mouse_2.clicked_name) == 4 and mouse_2.clicked_name[3] == 'greenOne':
            continueRoutine = False
            for stim in clickableStims:
                stim.opacity = 1
    ImageComponent greenOne
      image [set every repeat] = stimuli/greenOne.png
      pos [set every repeat] = xys[0]
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent greenTwo
      image [set every repeat] = stimuli/greenTwo.png
      pos [set every repeat] = xys[2]
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent greenThree
      image [set every repeat] = stimuli/greenThree.png
      pos [set every repeat] = xys[3]
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent greenFour
      image [set every repeat] = stimuli/greenFour.png
      pos [set every repeat] = xys[1]
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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  Routine secondFeedback
    CodeComponent secondFeedbackCode
      Code Type = Auto->JS
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      Begin Routine:
        #keys = event.getKeys()
        #if 'e' in keys:
        #    key_pressed = True
        #if key_pressed == True:
        #    continueRoutine = False

        if mouse_2.clicked_name == ['greenFour', 'greenThree', 'greenTwo', 'greenOne']:
            feedbackColor = "stimuli/GreenCorrectScreen.png"
            feedbackSound = "stimuli/Positive.wav"
            number_correct += 1
            number_total += 1

        else:
            feedbackColor = "stimuli/solid-red-background.jpg"
            feedbackSound = "stimuli/Negative.wav"
            number_incorrect +=1
            number_total += 1
    ImageComponent secondFeedbackStim
      image [set every repeat] = $feedbackColor
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    SoundComponent secondFeedbackAudio
      sound [set every repeat] = $feedbackSound
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine End
  Routine startBox
    CodeComponent startBoxCode
      Code Type = Auto->JS
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      Begin Experiment:
        firstArrayRand = []
        secondArrayRand = []
      Begin Routine:
        #Mouse not visible
        #event.Mouse(visible=False)

        #Experiment ends after 4 hours
        #if myClock.getTime() > 14400:
            #trials.finished = True
            #continueRoutine = False

        firstArrayRand.clear()
        firstArrayRand.append(randint(0,5))

        secondArrayRand.clear()
        secondArrayRand.append(randint(0,5))
      Each Frame:
        #keys = event.getKeys()
        #if 'e' in keys:
        #    key_pressed = True
        #if key_pressed == True:
        #    continueRoutine = False
  Routine endScreen
    TextComponent endScreenText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Monkey ran on AGL phase 3 task!! ' +str(number_correct) + ' correct out of ' + str(number_total) + ' Must be X for X days in a row to pass.'
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine locationRandomization
    CodeComponent locationRandomizationCode
      Code Type = Auto->JS
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      Begin Routine:
        # Set grid of possible positions
        xys = [[-.5, .275], [0, .275], [.5, .275], [-.5, 0], [.5, 0], [-.5, -.275], [0, -.275], [.5, -.275], [0, 0]]
        # randomize the coordinates
        shuffle(xys)
Flow
  Routine startScreen
  LoopInitiator arrayLoop loopType="TrialHandler"
    conditionsFile = phase5Randomizer.csv
    isTrials = False
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('playfirstArray', 1), ('playsecondArray', 0)]),
      OrderedDict([('playfirstArray', 0), ('playsecondArray', 1)])]
    Routine startBox
    LoopInitiator firstLoop loopType="TrialHandler"
      loopType = random
      nReps = playfirstArray * firstArrayRand[0]
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      Routine locationRandomization
      Routine firstArray
      Routine firstFeedback
      Routine pause
    LoopTerminator firstLoop
    LoopInitiator secondLoop loopType="TrialHandler"
      loopType = random
      nReps = playsecondArray * secondArrayRand[0]
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      Routine locationRandomization
      Routine secondArray
      Routine secondFeedback
      Routine pause
    LoopTerminator secondLoop
  LoopTerminator arrayLoop
  Routine endScreen
  Routine End
